PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['Please enter the Subject ID:'], expInfo['Please enter the Session Number:'])
  Experiment info = {'Please enter the Subject ID:': 'AANNNAAA', 'Please enter the Session Number:': '["1","2"]', "Enter subject\\'s handedness:": '["Right", "Left"]'}
  Full-screen window = True
  Monitor = stimpres
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = EmoNback_Practice
  frameRate = 60
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine TitlePage
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    KeyboardComponent NextPage
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent NbackTitle
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the
        Faces & Places Game!
    CodeComponent handednessLogic
      Code Type = Py
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      Begin Experiment:
        # Define response mapping based on handedness
        if expInfo['Enter subject\'s handedness:'].lower() == 'right':
            matchKey = 'left'
            noMatchKey = 'right'
            leftScreenInstruction = "MATCH\nPOINTER"
            rightScreenInstruction = "NO MATCH\nMIDDLE"
        else:
            matchKey = 'right'
            noMatchKey = 'left'
            leftScreenInstruction = "NO MATCH\nMIDDLE"
            rightScreenInstruction = "MATCH\nPOINTER"

        # SAFETY: force to strings
        matchKey = str(matchKey)
        noMatchKey = str(noMatchKey)
  Routine Instructions1
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    KeyboardComponent NextPage_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_1
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        In this game, you will see different pictures.
        These pictures will be...
    TextboxComponent Label_faces
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Faces
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    TextboxComponent Places_label
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      pos = (0.3, -0.3)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Places
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    ImageComponent Face_image
      image = VM Stimuli/PracticeNC1.bmp
      pos = (-0.3, -0.10)
      size = (0.30, 0.30)
      startVal [time (s)] = 0.0
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    ImageComponent Place_Image
      image = VM Stimuli/Place1.bmp
      pos = (0.3, -0.10)
      size = (0.30, 0.30)
      startVal [time (s)] = 0.0
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    TextboxComponent OR
      bold = True
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      editable = False
      letterHeight = 0.04
      pos = (0, -0.1)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = OR
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  Routine Instructions2
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    KeyboardComponent NextPage_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_2
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Faces
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    ImageComponent FaceImage
      image = VM Stimuli/PracticeNC1.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0.0
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  Routine Instructions3
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    KeyboardComponent NextPage_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_3
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Places
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    ImageComponent PlaceImage
      image = VM Stimuli/Place1.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0.0
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  Routine Instructions5pt5
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    KeyboardComponent NextPage_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_5pt5
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        There are two parts to the game:
        0-back and 2-back
  Routine Instructions6
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    KeyboardComponent NextPage_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextboxComponent Instructions_6
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        At the beginning of 0-back,
        you will see a target picture:
    TextboxComponent Instructions_6_Target
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (-0.1, 0)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Target          =
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    ImageComponent TargetImage
      image = VM Stimuli/PracticeNC1.bmp
      pos = (0.2, 0)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_6_Match
      bold = True
      borderWidth = 0
      color = black
      disabled = True
      editable = False
      letterHeight = 0.04
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = After the target, more pictures will appear on the screen one at a time. If you see the target image, press MATCH with your POINTER finger. Please press with your POINTER finger now.
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  Routine Instructions14
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    KeyboardComponent NextPage_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_10
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = But if the picture does not match the target:
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    TextboxComponent Instructions_6_Match_3
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Press with your
        MIDDLE finger for a NO MATCH.
    ImageComponent TargetImage_3
      image = VM Stimuli/PracticeFO1.bmp
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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  Routine Instructions6pt2
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    KeyboardComponent NextPage_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_6pt2
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Let's practice now!
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  Routine Goodbye
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    KeyboardComponent EndProgram
      allowedKeys = 'space', 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Each Frame:
        if 'space' in EndProgram.keys:
            core.quit()
    TextboxComponent AllDone
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        All Done!


        Please tell the experimenter
        you are finished.


        Press the SPACEBAR to exit.
  Routine PracticeTrial1_Cue
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    TextboxComponent CueFix_1
      bold = False
      borderWidth = 0
      color = $(1.0000, -1.0000, 1.0000)
      editable = False
      letterHeight = 0.1
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextboxComponent CueTarget_1
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.15, 0)
      size = (1, 1)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2.5
      text = Target          =
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    ImageComponent CueTargetImage_1
      image = VM Stimuli/PracticeNC1.bmp
      pos = (0.25, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    TextboxComponent Zero_back
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text = 0-back
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  Routine PracticeTrial2_Cue
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    TextboxComponent CueFix_2
      bold = False
      borderWidth = 0
      color = $(1.0000, -1.0000, 1.0000)
      editable = False
      letterHeight = 0.1
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextboxComponent CueTarget_2
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.15, 0)
      size = (1, 1)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2.5
      text = Target          =
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    ImageComponent CueTargetImage_2
      image = VM Stimuli/Place1.bmp
      pos = (0.25, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    TextboxComponent Zero_back_2
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text = 0-back
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  Routine PracticeTrial_Feedback
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    TextboxComponent Fix
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.1
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
      text = +
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    TextboxComponent Feedback
      bold = True
      borderWidth = 0
      color [set every repeat] = $fbColor
      editable = False
      letterHeight = 0.05
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $fbText
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  Routine Instructions8
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    KeyboardComponent NextPage_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_8
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        During the 2-Back,
        you will see pictures appear one at a time.

        You will decide if each
        picture is the same as the one you saw “2 back.”

        Press with your POINTER finger for MATCH.

        Press with your MIDDLE finger for NO MATCH.
  Routine Instructions11
    RoutineSettingsComponent Instructions11
      disabled = True
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    KeyboardComponent NextPage_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_11
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Press MATCH with your POINTER finger if it is the same picture that was shown two pictures before.

        Press NO MATCH with your MIDDLE finger if it is a different than the picture shown two pictures before.


        Here is an example:
  Routine Instructions9
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    KeyboardComponent NextPage_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_9
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = For example, if the first picture you see is:
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    ImageComponent Example_Stim
      image [set every repeat] = VM Stimuli/PracticeFO1.bmp
      size = (0.22, 0.22)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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    TextboxComponent Instructions_12
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This is a NO MATCH
        because nothing was shown 2 back.
  Routine Instructions21
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    KeyboardComponent NextPage_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_21
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This is also a NO MATCH,
        because nothing was shown 2 back.
    ImageComponent One_Back_Example_Stim
      image = VM Stimuli/PracticeFO1.bmp
      pos = (-0.30, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Example_Stim_2
      image [set every repeat] = VM Stimuli/PracticeFO2.bmp
      size = (0.22, 0.22)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_2
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_2
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions24
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    KeyboardComponent NextPage_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_24
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This is a MATCH because
        it is the same as the one shown 2 back.
    PolygonComponent Green_Border
      fillColor = limegreen
      lineColor = limegreen
      pos = (-0.50, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Two_Back_Example_Stim
      image = VM Stimuli/PracticeFO1.bmp
      pos = (-0.50, 0)
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent One_Back_Example_Stim_2
      image = VM Stimuli/PracticeFO2.bmp
      pos = (-0.30, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Example_Stim_3
      image [set every repeat] = VM Stimuli/PracticeFO1.bmp
      size = (0.22, 0.22)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_3
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_3
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions25
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    KeyboardComponent NextPage_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_25
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This is a NO MATCH because it
        is a different picture than the one shown 2 back.
    ImageComponent Two_Back_Example_Stim_2
      image = VM Stimuli/PracticeFO2.bmp
      pos = (-0.50, 0)
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent One_Back_Example_Stim_3
      image = VM Stimuli/PracticeFO1.bmp
      pos = (-0.30, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Example_Stim_4
      image [set every repeat] = VM Stimuli/PracticeFO3.bmp
      size = (0.22, 0.22)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_4
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_4
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions15
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    KeyboardComponent NextPage_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_15
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Let's try some together!
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  Routine Instructions32
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    KeyboardComponent NextPage_17
      allowedKeys = 'space','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_32
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.27)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = MATCH or NO MATCH?
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    ImageComponent Example_Stim_5
      image = VM Stimuli/PracticeFO2.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_5
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_5
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions27
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    KeyboardComponent NextPage_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_27
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.27)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This is a NO MATCH
        because nothing was shown 2 back.
    ImageComponent Example_Stim_6
      image = VM Stimuli/PracticeFO2.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_6
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_6
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions33
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    KeyboardComponent NextPage_19
      allowedKeys = 'space','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_33
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.27)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = MATCH or NO MATCH?
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    ImageComponent Example_Stim_7
      image = VM Stimuli/PracticeFO3.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_7
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_7
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions26
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    KeyboardComponent NextPage_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_26
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.27)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This is a NO MATCH
        because nothing was shown 2 back.
    ImageComponent One_Back_Example_Stim_4
      image = VM Stimuli/PracticeFO2.bmp
      pos = (-0.30, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Example_Stim_8
      image = VM Stimuli/PracticeFO3.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_8
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_8
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions34
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    KeyboardComponent NextPage_21
      allowedKeys = 'space','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.27)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = MATCH or NO MATCH?
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    ImageComponent Example_Stim_9
      image = VM Stimuli/PracticeFO1.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_9
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_9
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions28
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    KeyboardComponent NextPage_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_28
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.27)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This is a NO MATCH
        because this picture is different
        from the one that was shown 2 back.
    ImageComponent Two_Back_Example_Stim_3
      image = VM Stimuli/PracticeFO2.bmp
      pos = (-0.50, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent One_Back_Example_Stim_5
      image = VM Stimuli/PracticeFO3.bmp
      pos = (-0.30, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Example_Stim_10
      image = VM Stimuli/PracticeFO1.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_10
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_10
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions29
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    KeyboardComponent NextPage_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_29
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.27)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This is a MATCH because it is
        the same picture as the one shown 2 back.
    PolygonComponent Green_Border_2
      fillColor = limegreen
      lineColor = limegreen
      pos = (-0.50, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Two_Back_Example_Stim_4
      image = VM Stimuli/PracticeFO3.bmp
      pos = (-0.50, 0)
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent One_Back_Example_Stim_6
      image = VM Stimuli/PracticeFO1.bmp
      pos = (-0.30, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Example_Stim_11
      image = VM Stimuli/PracticeFO3.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_11
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_11
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions22
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    KeyboardComponent NextPage_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_22
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Reminders:

        You will see pictures one at a time.

        During the 0-back, look for the Target picture.

        During the 2-back, look
        for what was shown 2 pictures back.

        Press with your POINTER finger for a MATCH, and press with your MIDDLE finger for a NO MATCH.

        Any questions?
  Routine Instructions30
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    KeyboardComponent NextPage_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_30
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Let's practice!
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  Routine InstructionsSpaceToContinue
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    KeyboardComponent NextPage_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_Space
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine Instructions36
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    KeyboardComponent NextPage_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_36
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Now let's practice switching between
        the 0-back and 2-back parts of the games.

        You will see a plus sign
        between each picture, like this:
    TextboxComponent magenta_fixcross
      bold = False
      color = 1.0000, -1.0000, 1.0000
      editable = False
      letterHeight = 0.20
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = +
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    TextboxComponent Instructions_37
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        The plus sign will turn purple
        when the game is switching between the 0-back
        and the 2-back, so make sure to pay attention!
  Routine PracticeTrial5_Cue
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    TextboxComponent CueFix_5
      bold = False
      borderWidth = 0
      color = $(1.0000, -1.0000, 1.0000)
      editable = False
      letterHeight = 0.1
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextboxComponent Cue_2Back
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = 2-Back
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  Routine PracticeTrial6_Cue
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    TextboxComponent CueFix_6
      bold = False
      borderWidth = 0
      color = $(1.0000, -1.0000, 1.0000)
      editable = False
      letterHeight = 0.1
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextboxComponent CueTarget_6
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.15, 0)
      size = (1, 1)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2.5
      text = Target          =
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    ImageComponent CueTargetImage_6
      image = VM Stimuli/Place3.bmp
      pos = (0.25, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    TextboxComponent Zero_back_3
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text = 0-back
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  Routine PracticeTrial7_Cue
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    TextboxComponent CueFix_7
      bold = False
      borderWidth = 0
      color = $(1.0000, -1.0000, 1.0000)
      editable = False
      letterHeight = 0.1
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextboxComponent Cue_2Back_2
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = 2-Back
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  Routine PracticeTrial_Stim
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    CodeComponent targetLogic
      Code Type = Py
      Begin Routine:
        # Decide correct key for this trial
        if TargetType == 'target':
            correctKey = matchKey
        else:
            correctKey = noMatchKey
    KeyboardComponent response
      allowedKeys [set every repeat] = [matchKey, noMatchKey]
      correctAns = $correctKey
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    ImageComponent Stim
      image [set every repeat] = $Stimulus
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    TextboxComponent Stim_LeftScreenInstruction
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Stim_RightScreenInstruction
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.2)
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $rightScreenInstruction
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    CodeComponent feedbackLogic
      Code Type = Py
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      End Routine:
        if response.keys is None:
            fbText = "No response."
            fbColor = 'yellow'
        elif response.corr:
            fbText = "Correct!"
            fbColor = 'limegreen'
        else:
            fbText = "Incorrect"
            fbColor = 'red'
  Routine PracticeTrial8_Cue
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    TextboxComponent CueFix_8
      bold = False
      borderWidth = 0
      color = $(1.0000, -1.0000, 1.0000)
      editable = False
      letterHeight = 0.1
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextboxComponent CueTarget_8
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.15, 0)
      size = (1, 1)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2.5
      text = Target          =
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    ImageComponent CueTargetImage_8
      image = VM Stimuli/PracticeNC2.bmp
      pos = (0.25, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    TextboxComponent Zero_back_4
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text = 0-back
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  Routine Instructions6pt1
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    KeyboardComponent NextPage_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextboxComponent Instructions_7
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Then, pictures will appear one at a time.
        You will decide if each picture matches the target. For example, if you see:
    ImageComponent TargetImage_2
      image = VM Stimuli/PracticeNC1.bmp
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_6_Match_2
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Press with your POINTER finger for
        a MATCH every time you see that picture.
  Routine Instructions_31
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    KeyboardComponent NextPage_28
      allowedKeys = 'space','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_4
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.27)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = MATCH or NO MATCH?
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    ImageComponent Example_Stim_12
      image = VM Stimuli/PracticeFO3.bmp
      size = (0.30, 0.30)
      startVal [time (s)] = 0
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    TextboxComponent Example_LeftScreenInstruction_12
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $leftScreenInstruction
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    TextboxComponent Example_RightScreenInstruction_12
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.2, -0.23)
      size = (1, 1)
      startVal [time (s)] = 0
      text [set every repeat] = $rightScreenInstruction
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  Routine Instructions_5
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    KeyboardComponent NextPage_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_38
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Any questions?

        Get ready to practice
        playing the Faces & Places Game.


        Press the SPACEBAR to begin.
  Routine routine_1
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    KeyboardComponent NextPage_30
      allowedKeys = [matchKey]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextboxComponent Instructions_13
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Then, pictures will appear one at a time.
        You will decide if each picture matches the target. For example, if you see:
    ImageComponent TargetImage_4
      image = VM Stimuli/PracticeNC1.bmp
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_6_Match_4
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Press with your POINTER finger for
        a MATCH every time you see that picture.
    TextboxComponent Instructions_6_Match_6
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.35)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Please press it now.
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  Routine routine
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    KeyboardComponent NextPage_31
      allowedKeys = [noMatchKey]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_14
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = But if the picture does not match the target:
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    TextboxComponent Instructions_6_Match_5
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Press with your
        MIDDLE finger for a NO MATCH.
    ImageComponent TargetImage_5
      image = VM Stimuli/PracticeFO1.bmp
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextboxComponent Instructions_6_Match_7
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.35)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Please press it now.
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Flow
  Routine TitlePage
  Routine Instructions1
  Routine Instructions5pt5
  Routine Instructions6
  Routine Instructions6pt1
  Routine routine_1
  Routine Instructions14
  Routine routine
  Routine Instructions6pt2
  Routine PracticeTrial1_Cue
  LoopInitiator practiceLoop loopType="TrialHandler"
    conditionsFile = PracticeTrials/PracticeTrials1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ID': 2, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC2.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'NeutFace', 'BlockType': '0-Back'},
      {'ID': 3, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC1.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'NeutFace', 'BlockType': '0-Back'},
      {'ID': 4, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC3.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'NeutFace', 'BlockType': '0-Back'},
      {'ID': 5, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC2.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'NeutFace', 'BlockType': '0-Back'},
      {'ID': 6, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC1.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'NeutFace', 'BlockType': '0-Back'}]
    Routine PracticeTrial_Stim
    Routine PracticeTrial_Feedback
  LoopTerminator practiceLoop
  Routine InstructionsSpaceToContinue
  Routine PracticeTrial2_Cue
  LoopInitiator practiceLoop2 loopType="TrialHandler"
    conditionsFile = PracticeTrials/PracticeTrials2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ID': 2, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place1.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'Place', 'BlockType': '0-Back'},
      {'ID': 3, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place3.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '0-Back'},
      {'ID': 4, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place5.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '0-Back'},
      {'ID': 5, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place1.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'Place', 'BlockType': '0-Back'},
      {'ID': 6, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place3.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '0-Back'}]
    Routine PracticeTrial_Stim
    Routine PracticeTrial_Feedback
  LoopTerminator practiceLoop2
  Routine InstructionsSpaceToContinue
  Routine Instructions8
  Routine Instructions11
  Routine Instructions9
  Routine Instructions21
  Routine Instructions24
  Routine Instructions25
  Routine Instructions15
  Routine Instructions32
  Routine Instructions27
  Routine Instructions33
  Routine Instructions26
  Routine Instructions34
  Routine Instructions28
  Routine Instructions_31
  Routine Instructions29
  Routine Instructions22
  Routine Instructions30
  LoopInitiator practiceLoop3 loopType="TrialHandler"
    conditionsFile = PracticeTrials/PracticeTrials3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ID': 1, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeFO2.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'NegFace', 'BlockType': '2-Back'},
      {'ID': 2, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeFO4.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'NegFace', 'BlockType': '2-Back'},
      {'ID': 3, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeFO2.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'NegFace', 'BlockType': '2-Back'},
      {'ID': 4, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeFO4.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'NegFace', 'BlockType': '2-Back'},
      {'ID': 5, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeFO1.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'NegFace', 'BlockType': '2-Back'}]
    Routine PracticeTrial_Stim
    Routine PracticeTrial_Feedback
  LoopTerminator practiceLoop3
  Routine InstructionsSpaceToContinue
  LoopInitiator practiceLoop4 loopType="TrialHandler"
    conditionsFile = PracticeTrials/PracticeTrials4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ID': 1, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place1.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '2-Back'},
      {'ID': 2, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place5.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '2-Back'},
      {'ID': 3, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place1.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'Place', 'BlockType': '2-Back'},
      {'ID': 4, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place6.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '2-Back'},
      {'ID': 5, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place1.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'Place', 'BlockType': '2-Back'}]
    Routine PracticeTrial_Stim
    Routine PracticeTrial_Feedback
  LoopTerminator practiceLoop4
  Routine Instructions36
  Routine Instructions_5
  Routine PracticeTrial5_Cue
  LoopInitiator practiceLoop5 loopType="TrialHandler"
    conditionsFile = PracticeTrials/PracticeTrials5.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ID': 2, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeHO1.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'PosFace', 'BlockType': '2-Back'},
      {'ID': 3, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeHO2.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'PosFace', 'BlockType': '2-Back'},
      {'ID': 4, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeHO3.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'PosFace', 'BlockType': '2-Back'},
      {'ID': 5, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeHO2.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'PosFace', 'BlockType': '2-Back'}]
    Routine PracticeTrial_Stim
    Routine PracticeTrial_Feedback
  LoopTerminator practiceLoop5
  Routine PracticeTrial6_Cue
  LoopInitiator practiceLoop6 loopType="TrialHandler"
    conditionsFile = PracticeTrials/PracticeTrials6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ID': 2, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place5.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '0-Back'},
      {'ID': 3, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place3.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'Place', 'BlockType': '0-Back'},
      {'ID': 4, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place6.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '0-Back'},
      {'ID': 5, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place3.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'Place', 'BlockType': '0-Back'}]
    Routine PracticeTrial_Stim
    Routine PracticeTrial_Feedback
  LoopTerminator practiceLoop6
  Routine PracticeTrial7_Cue
  LoopInitiator practiceLoop7 loopType="TrialHandler"
    conditionsFile = PracticeTrials/PracticeTrials7.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ID': 2, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place3.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '2-Back'},
      {'ID': 3, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place5.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '2-Back'},
      {'ID': 4, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place1.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'Place', 'BlockType': '2-Back'},
      {'ID': 5, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/Place5.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'Place', 'BlockType': '2-Back'}]
    Routine PracticeTrial_Stim
    Routine PracticeTrial_Feedback
  LoopTerminator practiceLoop7
  Routine PracticeTrial8_Cue
  LoopInitiator practiceLoop8 loopType="TrialHandler"
    conditionsFile = PracticeTrials/PracticeTrials8.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ID': 2, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC1.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'NeutFace', 'BlockType': '0-Back'},
      {'ID': 3, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC2.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'NeutFace', 'BlockType': '0-Back'},
      {'ID': 4, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC3.bmp', 'TargetType': 'nontarget', 'CorrectResponse': 'Nontarget', 'StimType': 'NeutFace', 'BlockType': '0-Back'},
      {'ID': 5, 'Weight': 1, 'Nested': None, 'Procedure': 'PracticeTrialsPROC', 'Stimulus': 'VM Stimuli/PracticeNC2.bmp', 'TargetType': 'target', 'CorrectResponse': 'Target', 'StimType': 'NeutFace', 'BlockType': '0-Back'}]
    Routine PracticeTrial_Stim
    Routine PracticeTrial_Feedback
  LoopTerminator practiceLoop8
  Routine Goodbye
